PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  color = $[0.5,0.5,0.5]
  expName = Memory and Motivation _ Satisfaction
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Routines
  Routine trial
  Routine experiment_instructions
    TextComponent exp_instruct
      color = black
      font = Times New Roman
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        In this experiment you will complete 3 experimental phases. Prior to the start of each phase, detailed instructions outlining what to do in that phase will be presented on-screen.
        After you read the instructions and are ready to begin press Space to start that phase. During the experiment, please follow all of the instructions carefully.
        Please do not exit and restart the task.

        Please sit facing your computer at a comfortable distance. Do your best to keep focused on the task and refrain from engaging with distractions in your surroundings for the duration of the experiment.

        Press Space To Continue
    KeyboardComponent exp_continue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent exp_timestart
      Code Type = Auto->JS
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  Routine phase1_instructions
    TextComponent encode_instruct
      color = black
      font = Times New Roman
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        In this part a series of faces will appear on-screen individually with a name beneath it.
        Please memorize the full name of each person while it is on the screen.
        The experiment will automatically proceed with no need for any keyboard presses. You will get a short break halfway through the phase to help you keep focused.

        Press Space To Continue
    KeyboardComponent phase1_cont
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent ph1_instruct
      Code Type = Auto->JS
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  Routine prep_code
    CodeComponent startcode
      Code Type = Auto->JS
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      Begin Experiment:
        import random, xlrd

        # randomize seed
        random.seed()

        #stimulus file

        infile = 'stimuli_list.xlsx'

        # Within stimuli list 1st 12 faces are black female
        # 13 through 52 are white female
        # 53 through 64 are black male
        # 65 through end (104) are white male

        # first 104 names are female, remaining are male

        # number of trial (total and types)
        numtrial = 104
        numstudy = 52
        numnovel = 52

        numnames = 208
        numfemalenames = 104
        nummalenames = 104

        numfaces = 104
        numfemalefaces = 52
        numbffaces = 12
        numwffaces = 40
        nummalefaces = 52
        numbmfaces = 12
        numwmfaces = 40

        numstudyfemale = 26
        numstudymale = 26
        numnovelfemale = 26
        numnovelmale = 26

        numstudybf = 6
        numstudybm = 6
        numstudywf = 20
        numstudywm = 20
        numnovelbf = 6
        numnovelbm = 6
        numnovelwf = 20
        numnovelwm = 20
      Begin Routine:
        # access stimulus file
        inbook = xlrd.open_workbook(infile)
        insheet = inbook.sheet_by_index(0) # look at sheet 1

        # arrays for stimuli

        bfemalefaces = []
        wfemalefaces = []
        femalenames  = []
        bmalefaces   = []
        wmalefaces   = []
        malenames    = []

        # read the excel stimuli
        for rowx in range(numtrial):

            #read the values of all columns in this row
            row = insheet.row_values(rowx)

            # save face to arrays

            if rowx < (numbffaces):
                bfemalefaces.append(row[0])
            elif numbffaces <= rowx < (numfemalefaces):
                wfemalefaces.append (row[0])
            elif numfemalefaces <= rowx < (numfemalefaces + numbmfaces):
                bmalefaces.append (row[0])
            elif (numfemalefaces + numbmfaces) <= rowx < numfaces:
                wmalefaces.append (row[0])

        for rowx in range(numnames):

            row = insheet.row_values(rowx)

            if rowx < numfemalenames:
                femalenames.append(row[1])
            elif rowx >= numfemalenames:
                malenames.append (row[1])

        # randomize stimuli
        random.shuffle(bfemalefaces)
        random.shuffle(wfemalefaces)
        random.shuffle(bmalefaces)
        random.shuffle(wmalefaces)

        random.shuffle(femalenames)
        random.shuffle(malenames)

        # final arrays for stimuli

        face_files = []
        fullnames  = []
        old_new    = []
        novelnames = []

        # set some counters
        i = 0
        g = 0 # female counter
        h = 0 # male counter
        j = 0 # black female counter
        k = 0 # black male counter
        l = 0 # white female counter
        m = 0 # white male counter

        for i in range(numnames):
            if i < (numstudybf): # if its black female to be studied
               face_files.append(bfemalefaces[j]) # append next black female face
               fullnames.append(femalenames[g]) # append next female name
               g = g + 1
               j = j + 1
            elif numstudybf <= i < (numstudyfemale): # if its white female to be studied
                face_files.append(wfemalefaces[l]) # append next white female face
                fullnames.append(femalenames[g]) # append next female name
                g = g + 1
                l = l + 1
            elif numstudyfemale <= i < (numstudyfemale + numstudybm): # if its black male to be studied
                face_files.append(bmalefaces[k]) # append next black male face
                fullnames.append(malenames[h]) # append next male name
                k = k + 1
                h = h + 1
            elif (numstudyfemale + numstudybm) <= i < numstudy: # if white male to be studied
                face_files.append(wmalefaces[m]) # append next white male face
                fullnames.append(malenames[h]) # append next male name
                m = m + 1
                h = h + 1
            elif numstudy <= i < (numstudy + numnovelbf): # if black female novel
                face_files.append(bfemalefaces[j]) # append next black female face
                fullnames.append(femalenames[g]) # append next female name
                g = g + 1
                j = j + 1
            elif (numstudy + numnovelbf) <= i < (numstudy + numnovelfemale): # if white novel female
                face_files.append(wfemalefaces[l]) # append next white female face
                fullnames.append(femalenames[g]) # append next female name
                g = g + 1
                l = l + 1
            elif (numstudy + numnovelfemale) <= i < (numstudy + numnovelfemale + numnovelbm): # if black novel male
                face_files.append(bmalefaces[k]) # append next black male face
                fullnames.append(malenames[h]) # append next male name
                k = k + 1
                h = h + 1
            elif (numstudy + numnovelfemale + numnovelbm) <= i < numtrial: # if novel white male
                face_files.append(wmalefaces[m]) # append next white male face
                fullnames.append(malenames[h])
                m = m + 1
                h = h + 1
        # next create the novel name list, gender matched to full name/face lists
            elif numtrial <= i < (numtrial + numstudyfemale): # if study female
                novelnames.append(femalenames[g]) # add female name
                g = g + 1
            elif (numtrial + numstudyfemale) <= i < (numtrial + numstudy): # if study male
                novelnames.append(malenames[h]) # add male name
                h = h + 1
            elif (numtrial + numstudy) <= i < (numtrial + numstudy + numnovelfemale): # if novel female
                novelnames.append(femalenames[g]) # add female name
                g = g + 1
            elif (numtrial + numstudy + numnovelfemale) <= i < numnames: # if novel male
                novelnames.append(malenames[h]) # add male name
                h = h + 1

        #print(face_files)
        #print(fullnames)
        #print(novelnames)

        for i in range(numtrial):
            if i < numstudy:
                old_new = ("old")
            else:
                old_new = ("new")

        femalelurenames = []
        malelurenames   = []

        for i in range(numstudy):
            if i < numstudyfemale:
                femalelurenames.append(fullnames[i])
            elif numstudyfemale <= i < numstudy:
                malelurenames.append(fullnames[i])

        #print(femalelurenames)
        #print(malelurenames)
  Routine ITI500
    PolygonComponent fix500
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine phase1_encode
    TextComponent encode_name
      color = black
      font = Times New Roman
      letterHeight = 0.15
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $FullName
      wrapWidth = 1.8
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    ImageComponent encode_face
      image [set every repeat] = $FaceFile
      pos = (0, 0.08)
      size = (1, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine memorize_code
    CodeComponent ph1_code
      Code Type = Auto->JS
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      Begin Experiment:
        # create a list of order to show study items
        study_order = list(range(numstudy))

        #randomize order
        random.shuffle(study_order)

        study_trial = 0
      Begin Routine:
        # load in the face for this trial
        FaceFile = face_files [study_order[study_trial]]

        # load in the name for this trial
        FullName = fullnames[study_order[study_trial]]

        # Log info
        thisExp.addData('Face',FaceFile)
        thisExp.addData('Name', FullName)
        thisExp.addData('ItemID', study_order[study_trial])
        thisExp.addData('StudyTrial', study_trial)

        #increment study trial counter
        study_trial = study_trial + 1
  Routine phase_finish
    TextComponent phase_finishtext
      color = black
      font = Times New Roman
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Phase Finished!

        Press Space To Continue Experiment
    KeyboardComponent finish_cont
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent timing
      Code Type = Both
      Begin JS Routine:
        break_start = t;
      End JS Routine:
        break_end = phase_finishClock.getTime();

        break_duration = break_end - break_start;
  Routine judgement_code
    CodeComponent FOK_code
      Code Type = Auto->JS
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      Begin Experiment:
        FOKtest_order = list(range(numtrial))

        random.shuffle(FOKtest_order)

        FOKtest_trial = 0
      Begin Routine:
        # load in the face for this trial
        FaceFile = face_files[FOKtest_order[FOKtest_trial]]

        # load in the name for this trial
        FullName = fullnames[FOKtest_order[FOKtest_trial]]

        # Log info
        thisExp.addData('Face',FaceFile)
        thisExp.addData('Name', FullName)
        thisExp.addData('ItemID', FOKtest_order[FOKtest_trial])
        thisExp.addData('FOKTestTrial', FOKtest_trial)

        #increment study trial counter
        FOKtest_trial = FOKtest_trial + 1
  Routine phase3_instructions
    TextComponent restudy_instruct
      color = black
      font = Times New Roman
      letterHeight = 0.045
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        This is the end of the memory tests for this experiment. At this stage we are interested in determining which name you are most curious about. You will get the chance to select to see the name for up to half (39) of the faces we will show you.
        You will move through each face and will say either "Yes I wish to see their name", using the "Right Arrow", in which case the face and name will appear together again or "No I do not want to", using the "Left Arrow", moving you right to the next face.
        For faces for which you choose to see the associated name, you will be asked to provide a rating, from 1 to 5, about how satisfying it was to see the face and name together again. Please distribute your responses across the entire 1 to 5 scale.
        A countdown with how many "Yes choices" you have remaining will be in the bottom right corner, and you will get a break halfway through.
        Randomly throughout the phase you may see a blue square on the screen. When you see this square please press "0" as quickly as you can.

        Press Space to Begin
    KeyboardComponent phase3_cont
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent phase3_timing
      Code Type = Both
      Begin JS Routine:
        phase3_instruct_start = t;
      End JS Routine:
        phase3_instruct_end = phase3_instructionsClock.getTime();

        phase3_instruct_duration = phase3_instruct_end - phase3_instruct_start;

        phase2to3_duration = break_duration + phase3_instruct_duration;

        psychoJS.experiment.addData("BreakDurationBetweenPhase2andPhase3", phase2to3_duration);
  Routine restudy_code
    CodeComponent phase3_code
      Code Type = Both
      Begin Experiment:
        restudy_order = list(range(numstudy))

        random.shuffle(restudy_order)

        restudy_trial = 0
      Begin JS Experiment:
        restudy_order = [];
        for (var i = 0; i < numstudy; i++) {
            restudy_order.push(i);
        }

        restudies = 0;

        shuffle(restudy_order);
        restudy_trial = 0;

        restudycatch = [];
        for (var i = 0; i < (numtrial/2); i++) {
            restudycatch.push(i);
        }

        shuffle(restudycatch);

        restudycatch1 = restudycatch[0];

        if (restudycatch1 === 0 || restudycatch1 === ((numtrial/2)-1)) {
            restudycatch1 = restudycatch[1]
        }

        if (restudycatch1 === 0 || restudycatch1 === ((numtrial/2)-1)) {
            restudycatch1 = restudycatch[2]
        }

        shuffle(restudycatch);

        restudycatch2 = restudycatch[0]

        if (restudycatch2 === 0 || restudycatch2 === ((numtrial/2)-1)) {
            restudycatch2 = restudycatch[1]
        }

        if (restudycatch1 === 0 || restudycatch1 === ((numtrial/2)-1)) {
            restudycatch1 = restudycatch[2]
        }

        restudycatch2 = restudycatch2 + (numtrial/2);
      Begin JS Routine:
        FaceFile = face_files[restudy_order[restudy_trial]];
        FullName = fullnames[restudy_order[restudy_trial]];

        if (restudy_trial === restudycatch1 ){
            doCatch = 1;
            } else {
                if (restudy_trial === restudycatch2) {
                    doCatch = 1;
                    } else {
                        doCatch = 0;
                    }
                }


        if (restudy_trial === (numtrial/2)) {
            doRest = 1;
            } else {
                doRest = 0;
                }

        psychoJS.experiment.addData("Face",FaceFile);
        psychoJS.experiment.addData("Name",FullName);
        psychoJS.experiment.addData("ItemID", restudy_order[restudy_trial]);
        psychoJS.experiment.addData("RestudyTrial", restudy_trial);
      Begin Routine:
        restudynew = restudy_order[restudy_trial] + numstudy

        restudypos = list(range(1))
        random.shuffle(restudypos)

        # load in the face for this trial
        if restudypos [0] == 0
            FaceFile1 = face_files[restudy_order[restudy_trial]]
            FaceFile2 = face_files[restudynew]
            itemID1 = restudy_order[restudy_trial]
            itemID2 = restudynew
            status1 = 'Old'
            status2 = 'New'
            name1 = fullnames[restudy_order[restudy_trial]]
            name2 = fullnames[restudynew]
        elif restudypos[0] == 1
            FaceFile1 = face_files[restudynew]
            FaceFile2 = face_files[restudy_order[restudy_trial]]
            itemID1 = restudynew
            itemID2 = restudy_order[restudy_trial]
            status1 = 'Old'
            status2 = 'New'
            name1 = fullnames[restudynew]
            name2 = fullnames[restudy_order[restudy_trial]]

        # Log info
        thisExp.addData('FaceOption1',FaceFile1)
        thisExp.addData('FaceOption2',FaceFile2)
        thisExp.addData('NameOfOption1', name1)
        thisExp.addData('NameOfOption2', name2)
        thisExp.addData('Item1ID', itemID1)
        thisExp.addData('Item2ID', itemID2)
        thisExp.addData('FaceOption1Type', status1)
        thisExp.addData('FaceOption2Type', status2)
        thisExp.addData('FOKTestTrial', restudy_trial)
  Routine phase3_restudychoice
    TextComponent restudyprompt
      color = black
      font = Times New Roman
      letterHeight = 0.1
      pos = (0, 0.38)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Would you like to see their name again?
      wrapWidth = 1.7
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    TextComponent restudy_scale
      color = black
      font = Times New Roman
      letterHeight = 0.08
      pos = (0, 0.23)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Left Arrow = No, Right Arrow = Yes
      wrapWidth = 1.5
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    ImageComponent option_face
      image [set every repeat] = $FaceFile
      pos = (0, -0.15)
      saveStartStop = False
      size = (0.8, 0.6)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_restudychoice
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent restudychoicecode
      Code Type = Both
      Begin JS Routine:
        restudycountdowndec = ((numtrial / 2) - restudies);
        restudycountdown = Math.round(restudycountdowndec);
      End JS Routine:
        if ((key_restudychoice.keys === "right")) {
            if ((restudies < (numtrial / 2))) {
                doRestudy = 1;
                restudies = (restudies + 1);
            } else {
                doRestudy = 0;
            }
        } else {
            doRestudy = 0;
        }

        psychoJS.experiment.addData("RestudyChoice",doRestudy);

        restudy_trial = (restudy_trial + 1);
      End Routine:
        if(key_restudychoice.keys == 'left'):
            FaceFile = FaceFile1
            FullName = name1
        elif (key_restudychoice.keys == 'right');
            FaceFile = FaceFile2
            FullName = name2

        restudy_trial = restudy_trial + 1
    TextComponent countdown_prompt
      color = black
      font = Times New Roman
      letterHeight = 0.05
      pos = (0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = "Yes" Choices Left:
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    TextComponent countdown
      color = black
      font = Times New Roman
      letterHeight = 0.05
      pos = (0.84, -0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $restudycountdown
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  Routine phase2_stim
    ImageComponent judgement_face
      image [set every repeat] = $FaceFile
      size = (1.1, 0.9)
      startVal [time (s)] = 0.0
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    TextComponent recall_prompt1
      color = black
      font = Times New Roman
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Can you remember the persons full name?
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    KeyboardComponent recall_response
      allowedKeys = 'left', 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent recall_scale
      color = black
      font = Times New Roman
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Left arrow = no, Right arrow = Yes
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  Routine phase2_recallattempt
    TextComponent recall_prompt
      color = black
      font = Times New Roman
      letterHeight = 0.1
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      text = What is their name?
      wrapWidth = 1.5
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    ImageComponent FOKtestface
      image [set every repeat] = $FaceFile
      pos = (0, -0.15)
      saveStartStop = False
      size = (0.88, 0.68)
      startVal [time (s)] = 0.0
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    TextComponent recall_info
      color = black
      font = Times New Roman
      letterHeight = 0.08
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press Enter when done, or if you cannot recall.
      wrapWidth = 1.7
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        import string
        allLetters = list(string.ascii_lowercase)
      Begin Routine:
        textFill = ''
      Each Frame:
        keys = event.getKeys()
        if 'escape' in keys:
            core.quit()  # So you can quit
        else:
            if keys:
                if keys[0] == 'space':
                    textFill += ' '  # Adds a space instead of 'space'
                elif keys[0] == 'backspace':
                    textFill = textFill[:-1]  # Deletes
                elif keys[0] in allLetters:
                    textFill+=keys[0]  # Adds character to text if in alphabet.
                elif keys[0] == 'return':
                    thisExp.addData('answer', textFill)
                    continueRoutine = False
                copyText.setText(textFill)  # Set new text on screen
      End Routine:
        textFill = ''
    TextComponent text
      color = black
      font = Times New Roman
      letterHeight = 0.10
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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    TextComponent displayText
      color = black
      font = Times New Roman
      letterHeight = 0.1
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent copyText
      color = black
      font = Times New Roman
      letterHeight = 0.1
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine phase2_FOK
    TextComponent FOK_prompt
      color = black
      font = Times New Roman
      letterHeight = 0.1
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        How likely is it you could recognize their name?
    KeyboardComponent FOK_resp
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent FOK_scale
      color = black
      font = Times New Roman
      letterHeight = 0.08
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        1 = trials where recognition is least likely
        5 = trials where recognition is most likely
    CodeComponent timing_code
      Code Type = Auto->JS
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  Routine phase3_encode
    TextComponent restudyname
      color = black
      font = Times New Roman
      letterHeight = 0.15
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $FullName
      wrapWidth = 1.5
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    ImageComponent restudyface
      image [set every repeat] = $FaceFile
      pos = (0, 0.08)
      size = (1, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine phase4_instructions
    TextComponent memtest_instruct
      color = black
      font = Times New Roman
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        To conclude, you will now complete a recognition memory test. Each face will appear with 3 options for their name and you will select, using the 1, 2, and 3 keys, the option you think is correct.
        The faces will appear on screen automatically after the previous choice is made.
        Randomly throughout the phase you may see a blue square on the screen. When you see this square please press "0" as quickly as you can.

        Press Space To Continue
    KeyboardComponent phase4_cont
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent phase4_timing
      Code Type = Auto->JS
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  Routine phase4_memorytest
    TextComponent option1_text
      color = black
      font = Times New Roman
      letterHeight = 0.1
      pos = (0, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $option1
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    TextComponent option2_text
      color = black
      font = Times New Roman
      letterHeight = 0.1
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $option2
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    TextComponent option3_text
      color = black
      font = Times New Roman
      letterHeight = 0.1
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $option3
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    ImageComponent test_face
      image [set every repeat] = $FaceFile
      pos = (0, 0.135)
      saveStartStop = False
      size = (0.88, 0.68)
      startVal [time (s)] = 0.0
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    KeyboardComponent testchoice
      allowedKeys = '1','2','3'
      correctAns = $correctAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine test_code
    CodeComponent phase4_code
      Code Type = Both
      Begin Experiment:
        forcedchoice_order = list(range(numtrial))

        random.shuffle(forcedchoice_order)

        forcedchoice_trial = 0
      Begin JS Experiment:
        forcedchoice_order = [];
        for (var i = 0; i < numtrial; i++) {
            forcedchoice_order.push(i);
        }

        shuffle(forcedchoice_order);
        forcedchoice_trial = 0;

        lurenames = [];

        testcatch = [];
        for (var i = 0; i < (numtrial/2); i++) {
            testcatch.push(i);
        }

        shuffle(testcatch);

        testcatch1 = testcatch[0];

        shuffle(testcatch);

        testcatch2 = testcatch[0] + (numtrial/2);
      Begin JS Routine:
        if (forcedchoice_trial === testcatch1) {
            doCatch = 1;
            } else {
                if (forcedchoice_trial === testcatch2) {
                    doCatch = 1;
                    } else {
                        doCatch = 0;
                    }
                }

        FaceFile = face_files[forcedchoice_order[forcedchoice_trial]];
        FullName = fullnames[forcedchoice_order[forcedchoice_trial]];
        NovelName = novelnames[forcedchoice_order[forcedchoice_trial]];
        shuffle(femalelurenames);
        shuffle(malelurenames);
        if ((forcedchoice_order[forcedchoice_trial] < numstudyfemale)) {
            LureName = femalelurenames[0];
            if ((LureName === FullName)) {
                LureName = femalelurenames[1];
            }
        } else {
            if (((numstudyfemale <= forcedchoice_order[forcedchoice_trial]) && (forcedchoice_order[forcedchoice_trial] < numstudy))) {
                LureName = malelurenames[0];
                if ((LureName === FullName)) {
                    LureName = malelurenames[1];
                }
            } else {
                if (((numstudy <= forcedchoice_order[forcedchoice_trial]) && (forcedchoice_order[forcedchoice_trial] < (numstudy + numnovelfemale)))) {
                    LureName = femalelurenames[0];
                    if ((LureName === FullName)) {
                        LureName = femalelurenames[1];
                    }
                } else {
                    if ((((numstudy + numnovelfemale) <= forcedchoice_order[forcedchoice_trial]) && (forcedchoice_order[forcedchoice_trial] < numtrial))) {
                        LureName = malelurenames[0];
                        if ((LureName === FullName)) {
                            LureName = malelurenames[1];
                        }
                    }
                }
            }
        }
        var options = [];
        for (var i = 0; i < 3; i++) {
            options.push(i);
        }

        shuffle(options);
        if ((options[0] === 0)) {
            option1 = FullName;
            correctAns = "1";
            option1type = "Actual";
        } else {
            if ((options[0] === 1)) {
                option1 = NovelName;
                option1type = "New";
            } else {
                option1 = LureName;
                option1type = "Lure";
            }
        }
        if ((options[1] === 0)) {
            option2 = FullName;
            option2type = "Actual";
            correctAns = "2";
        } else {
            if ((options[1] === 1)) {
                option2 = NovelName;
                option2type = "New";
            } else {
                option2 = LureName;
                option2type = "Lure";
            }
        }
        if ((options[2] === 0)) {
            option3 = FullName;
            option3type = "Actual";
            correctAns = "3";
        } else {
            if ((options[2] === 1)) {
                option3 = NovelName;
                option3type = "New";
            } else {
                option3 = LureName;
                option3type = "Lure";
            }
        }

        psychoJS.experiment.addData("Face", FaceFile);
        psychoJS.experiment.addData("Name", FullName);
        psychoJS.experiment.addData("ItemID", forcedchoice_order[forcedchoice_trial]);
        psychoJS.experiment.addData("ForcedChoiceTestTrial", forcedchoice_trial);
        psychoJS.experiment.addData("Option1", option1);
        psychoJS.experiment.addData("Option1Type", option1type);
        psychoJS.experiment.addData("Option2", option2);
        psychoJS.experiment.addData("Option2type", option2type);
        psychoJS.experiment.addData("Option3", option3);
        psychoJS.experiment.addData("Option3Type", option3type);

        num1 = "1. ";
        num2 = "2. ";
        num3 = "3. ";

        option1n = num1 + option1;
        option2n = num2 + option2;
        option3n = num3 + option3;

        option1 = option1n;
        option2 = option2n;
        option3 = option3n;

        forcedchoice_trial = (forcedchoice_trial + 1)
      Begin Routine:
        FaceFile = face_files[forcedchoice_order[forcedchoice_trial]]

        FullName = fullnames[forcedchoice_order[forcedchoice_trial]]

        NovelName = novelnames[forcedchoice_order[forcedchoice_trial]]

        #print(femalelurenames)
        #print(malelurenames)

        random.shuffle(femalelurenames)
        random.shuffle(malelurenames)

        if forcedchoice_order[forcedchoice_trial] < numstudyfemale:
            LureName = femalelurenames[0]
            if LureName == FullName:
                LureName = femalelurenames[1]
        elif numstudyfemale <= forcedchoice_order[forcedchoice_trial] < numstudy:
            LureName = malelurenames[0]
            if LureName == FullName:
                LureName = malelurenames[1]
        elif numstudy <= forcedchoice_order[forcedchoice_trial] < (numstudy + numnovelfemale):
            LureName = femalelurenames[0]
            if LureName == FullName:
                LureName = femalelurenames[1]
        elif (numstudy + numnovelfemale) <= forcedchoice_order[forcedchoice_trial] < numtrial:
            LureName = malelurenames[0]
            if LureName == FullName:
                LureName = malelurenames[1]

        #scramble screen position options
        options = list(range(3))

        #print(options)

        random.shuffle(options)

        #print(options)

        #print(LureName)

        if options[0] == 0:
            option1 = FullName
            correctAns = '1'
            option1type = 'Actual'
        elif options[0] == 1:
            option1 = NovelName
            option1type = 'New'
        else:
            option1 = LureName
            option1type = 'Lure'

        if options[1] == 0:
            option2 = FullName
            option2type = 'Actual'
            correctAns = '2'
        elif options[1] == 1:
            option2 = NovelName
            option2type = 'New'
        else:
            option2 = LureName
            option2type = 'Lure'

        if options[2] == 0:
            option3 = FullName
            option3type = 'Actual'
            correctAns = '3'
        elif options[2] == 1:
            option3 = NovelName
            option3type = 'New'
        else:
            option3 = LureName
            option3type = 'Lure'

        thisExp.addData('Face',FaceFile)
        thisExp.addData('Name', FullName)
        thisExp.addData('ItemID', forcedchoice_order[forcedchoice_trial])
        thisExp.addData('TestTrial', forcedchoice_trial)
        thisExp.addData('Option1', option1)
        thisExp.addData('Option1Type', option1type)
        thisExp.addData('Option2', option2)
        thisExp.addData('Option2type', option2type)
        thisExp.addData('Option3', option3)
        thisExp.addData('Option3Type', option3type)

        forcedchoice_trial = forcedchoice_trial + 1
  Routine phase2_likeability
    TextComponent likeability_prompt
      color = black
      font = Times New Roman
      letterHeight = 0.1
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = FOK prompt
      wrapWidth = 1.5
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    TextComponent likeability_scale
      color = black
      font = Times New Roman
      letterHeight = 0.06
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = FOK scale
      wrapWidth = 1.5
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    KeyboardComponent likeability_resp
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
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  Routine phase2_familiarity
    TextComponent familiarity_prompt
      color = black
      font = Times New Roman
      letterHeight = 0.1
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = How familiar was the person's face?
      wrapWidth = 1.5
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    TextComponent familiarity_scale
      color = black
      font = Times New Roman
      letterHeight = 0.08
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 1 = Very Unfamiliar, 5 = Very Familiar
      wrapWidth = 1.5
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    KeyboardComponent familiarity_resp
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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  Routine phase2_FOKinstructions
    TextComponent FOKjudgement_instruct
      color = black
      font = Times New Roman
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Next, faces will appear on the screen and you must try and recall that persons full name.
        Please type the name, or any part of it that you do remember. Once you are finished typing this information press Enter. If you cannot recall anything, press Enter without typing anything, as there is no need to guess.
        Then, you will be asked to judge how likely it is, from 1 to 5, that you could correctly recognize that persons name if shown to you.
        On this scale, 1 is for trials in which you are least likely to recognize the name and 5 is for trials where you are most likely to recognize it. Please distribute your responses across the entire 1 to 5 scale, and keep in mind that these ratings are about whether you think you could recognize the name if given and not about whether you can recall it right now.
        The experiment will proceed once these answers are provided.
        Randomly throughout the phase you may see a blue square on the screen. When you see this square please press "0" as quickly as you can.

        Press Space To Continue
    KeyboardComponent phase2FOKcont_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent timing_ph2
      Code Type = Auto->JS
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  Routine phase2_likeabilityinstructions
    TextComponent likejudgement_instruct
      color = black
      font = Times New Roman
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Next, faces will appear on the screen and you must try and recall that persons full name.
        Once you are ready, you need to indicate whether or not you were successfully able to remember their whole name.
        Answer this truthfully using either the Left Arrow for no or the Right Arrow for yes.
        Then, you will be asked to judge how likely it is, from 1 to 5, that you could correctly recognize the name.
        Please try and distribute your responses across the entire 1 to 5 scale, and keep in mind that these ratings are about whether you think you could recognize the name if given and not about whether you can recall it right now.
        The experiment will proceed once these answers are provided.
        Randomly throughout the phase you may see a blue square on the screen. When you see this square please press "7" as quickly as you can.


        Please press space to continue
    KeyboardComponent phase2_likecont_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent pha2_timing
      Code Type = Auto->JS
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  Routine phase2_familiarityinstructions
    TextComponent phase2_faminstruct
      color = black
      font = Times New Roman
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        In this part faces will appear on screen for a short time. Use this time to try and recall the full name of that person.
        After this you will be directed to enter what you remembered by typing the name, or parts of it. Once you are finished typing or if you cannot remember, press enter.
        Next, you will be asked to judge how familiar that person's face is to you from 1 (very unfamiliar) to 6 (very familiar). Please try and distribute your responses across the entire 1 to 6 scale, ensuring you use all the ratings. Keep in mind that this judgement only concerns the familiarity of the person's face, and not their name.
        After these answers are provided, the next face will appear.
        Randomly throughout the phase you may see a blue square on the screen. When you see this square please press "7" as quickly as you can.

        Press Space To Continue
    KeyboardComponent phase2_famcont_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent phas2_time
      Code Type = Both
      Begin JS Routine:
        phase2_instruct_start = t;
      End JS Routine:
        phase2_instruct_end = phase2_familiarityinstructionsClock.getTime();

        phase2_instruct_duration = phase2_instruct_end - phase2_instruct_start;

        phase1to2_duration = phase2_instruct_duration + break_duration;

        psychoJS.experiment.addData("BreakDurationBetweenPhase1andPhase2", phase1to2_duration);
  Routine catch_trial
    PolygonComponent catch_cue
      fillColor = $[-0.5,-0.85,0.7]
      lineColor = $[-0.5, -0.85, 0.7]
      pos = (0, -0.12)
      saveStartStop = False
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_catch
      allowedKeys = '0'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent catch_prompt
      color = black
      font = Times New Roman
      letterHeight = 0.1
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please Press The "0" Key
      wrapWidth = 1.5
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  Routine restbreak
    TextComponent rest_text
      color = black
      font = Times New Roman
      letterHeight = 0.1
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        You are halfway through! You are doing great!
    KeyboardComponent rest_cont
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent restText2
      color = black
      font = Times New Roman
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = Press Space To Continue Experiment
      wrapWidth = 1.5
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  Routine Dummy_encode
    TextComponent Dummy_name
      color = black
      font = Times New Roman
      letterHeight = 0.15
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $dummynameencode
      wrapWidth = 1.8
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    ImageComponent dummy_image
      image [set every repeat] = $dummyfaceencode
      pos = (0, 0.08)
      size = (1, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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  Routine dummy_code
    CodeComponent dummy_prep
      Code Type = Auto->JS
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  Routine trial_code
    CodeComponent code_4
      Code Type = Auto->JS
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  Routine phase2_instructreminder1
    TextComponent text_2
      color = black
      font = Times New Roman
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        You are halfway through. You are doing great! Please keep using the entire scale.

        Press Space to Continue
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine phase2_intructreminder2
    TextComponent text_3
      color = black
      font = Times New Roman
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        You are 2/3 of the way through. You are doing great. Please keep using the entire scale.

        Press Space to Continue
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine recall_attempt
  Routine satisfaction
    TextComponent satisfaction_prompt
      color = black
      font = Times New Roman
      letterHeight = 0.1
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = How satisfied were you when you saw the face and name together?
      wrapWidth = 1.5
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    KeyboardComponent satisfaction_rating
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent satisfaction_scale
      color = black
      font = Times New Roman
      letterHeight = 0.08
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        1 = trials that were least satisfying
        5 = trials that were most satisfying
  Routine FOKexp_exit
    TextComponent FOK_cont_text
      color = black
      font = Times New Roman
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Experiment Complete!

        Thank you for participating in this study.
        Please return to the Qualtrics page and enter this number into the box asking for it so we can verify that you completed the experiment.

        1111

        Press Space To Exit!
    KeyboardComponent FOK_cont_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent end_timing3
      Code Type = Auto->JS
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  Routine Dummy_recall
    ImageComponent dummy_stim
      image [set every repeat] = $dummyfaceFOK
      pos = (0, -0.15)
      size = (0.88, 0.68)
      startVal [time (s)] = 0.0
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    TextComponent dummy_recallprompt
      color = black
      font = Times New Roman
      letterHeight = 0.1
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      text = What is their name?
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    TextComponent dummy_recall_info
      color = black
      font = Times New Roman
      letterHeight = 0.08
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press Enter when done, or if you cannot recall.
      wrapWidth = 1.7
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    CodeComponent code_5
      Code Type = Both
      Begin JS Routine:
        text2.text = '';
        textFill = '';

        psychoJS.eventManager.clearKeys()

        recalltstart = t;
      Each JS Frame:
        let theseKeys = psychoJS.eventManager.getKeys();
        if (theseKeys.length > 0) {  // at least one key was pressed
          textAdd = theseKeys[theseKeys.length-1];
          }

          if (textAdd === 'return') {
              textAdd = '';  // Add nothing
              continueRoutine = false;  // End routine (if that is what you want)
          } else if (textAdd === 'space') {
              textAdd = ' ';  // Add a space
          } else if (textAdd === 'backspace') {
              text2.text = text2.text.slice(0, -1);
              textAdd = undefined;
          } else if (['lshift', 'rshift'].includes(textAdd)) {
              modify = true;
          } else if (textAdd !== undefined) {
              if (modify) {
                  text2.text = text2.text + textAdd.toUpperCase();
                  modify = false;
              } else {
                  text2.text = text2.text + textAdd
              }
              textAdd = undefined;
          }
      End JS Routine:
        psychoJS.experiment.addData('RecallAttemptTyped', text2.text);

        recalltstop = Dummy_recallClock.getTime();

        recallrt = recalltstop - recalltstart;
    TextComponent text2
      color = black
      font = Times New Roman
      letterHeight = 0.1
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
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  Routine Dummy_FOK
    TextComponent dummyFOK_prompt
      color = black
      font = Times New Roman
      letterHeight = 0.1
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        How likely is it you could recognize their name?
    TextComponent dummy_scale
      color = black
      font = Times New Roman
      letterHeight = 0.08
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        1 = trials where recognition is least likely
        5 = trials where recognition is most likely
    CodeComponent code_6
      Code Type = Auto->JS
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    KeyboardComponent dummy_response
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine dummyFOK_code
    CodeComponent dummyFOKcode
      Code Type = Auto->JS
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Flow
  Routine prep_code
  Routine dummy_code
  Routine experiment_instructions
  Routine ITI500
  Routine phase1_instructions
  Routine ITI500
  Routine Dummy_encode
  Routine ITI500
  LoopInitiator memorize_loop loopType="TrialHandler"
    loopType = random
    nReps = numstudy
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    Routine memorize_code
    LoopInitiator Rest loopType="TrialHandler"
      loopType = random
      nReps = doRest
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      Routine restbreak
      Routine ITI500
    LoopTerminator Rest
    Routine phase1_encode
    Routine ITI500
  LoopTerminator memorize_loop
  Routine phase_finish
  Routine phase2_FOKinstructions
  Routine ITI500
  LoopInitiator FOKdummyloop loopType="TrialHandler"
    loopType = random
    nReps = numdummy
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    Routine dummyFOK_code
    Routine Dummy_recall
    Routine Dummy_FOK
    Routine ITI500
  LoopTerminator FOKdummyloop
  LoopInitiator judgement_loop loopType="TrialHandler"
    loopType = random
    nReps = numtrial
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    Routine judgement_code
    LoopInitiator breakloop loopType="TrialHandler"
      loopType = random
      nReps = doBreak
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      Routine phase2_instructreminder1
      Routine ITI500
    LoopTerminator breakloop
    LoopInitiator catch_loop loopType="TrialHandler"
      loopType = random
      nReps = doCatch
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      Routine catch_trial
      Routine ITI500
    LoopTerminator catch_loop
    Routine phase2_recallattempt
    Routine phase2_FOK
    Routine ITI500
  LoopTerminator judgement_loop
  Routine phase_finish
  Routine phase3_instructions
  Routine ITI500
  LoopInitiator restudytrial_loop loopType="TrialHandler"
    loopType = random
    nReps = numtrial
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    Routine restudy_code
    LoopInitiator catch2_loop loopType="TrialHandler"
      loopType = random
      nReps = doCatch
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      Routine catch_trial
      Routine ITI500
    LoopTerminator catch2_loop
    LoopInitiator restloop loopType="TrialHandler"
      loopType = random
      nReps = doRest
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      Routine phase2_instructreminder1
      Routine ITI500
    LoopTerminator restloop
    Routine phase3_restudychoice
    LoopInitiator restudy_loop loopType="TrialHandler"
      loopType = random
      nReps = doRestudy
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      Routine phase3_encode
      Routine satisfaction
    LoopTerminator restudy_loop
    Routine ITI500
  LoopTerminator restudytrial_loop
  Routine phase_finish
  Routine FOKexp_exit
